opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  glycerol-plate_1: {model: 96-flat, slot: 11}
  Mycoplasma_syn3_0: {model: 96-flat, slot: 1}
procedure:
-
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: A4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: A11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: E12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: A6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: B12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: D9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: C12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: A8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: D4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: D8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: H8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: D12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: E11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: A3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_1, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E8}
