opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  glycerol-plate_12: {model: 96-flat, slot: 11}
  Mycoplasma_genitalium_0: {model: 96-flat, slot: 1}
  Mesoplasma_florum_0: {model: 96-flat, slot: 2}
  Mycoplasma_pneumonia_0: {model: 96-flat, slot: 3}
procedure:
-
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: G5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: H6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: G6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: H9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: A12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: G9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: B11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: D4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: B12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: C12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_12, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: C2}
