opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  glycerol-plate_18: {model: 96-flat, slot: 11}
  Escherichia_coli_0: {model: 96-flat, slot: 1}
  Mycoplasma_genitalium_0: {model: 96-flat, slot: 2}
  Mycoplasma_pneumonia_0: {model: 96-flat, slot: 3}
  Mycoplasma_pneumonia_1: {model: 96-flat, slot: 4}
  Bacillus_subtilis_0: {model: 96-flat, slot: 5}
  Mesoplasma_florum_0: {model: 96-flat, slot: 6}
procedure:
-
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D5}
  - dispense: {pipette: p300_single, volume: 50, labware: Escherichia_coli_0, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H5}
  - dispense: {pipette: p300_single, volume: 50, labware: Escherichia_coli_0, well: C3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Escherichia_coli_0, well: C4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Escherichia_coli_0, well: C5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: E10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: A11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: G1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: G2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: G3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: E11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: B12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: A12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D3}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: A2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: A4}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: E4}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: E10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: A8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: D1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_18, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H12}
