opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  glycerol-plate_2: {model: 96-flat, slot: 11}
  Mycoplasma_syn3_1: {model: 96-flat, slot: 1}
  Mycoplasma_syn3_0: {model: 96-flat, slot: 2}
procedure:
-
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: C7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: G11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: E12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: G5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: C8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: F12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: G10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: C9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: G12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: H11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: G4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: E10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: B9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: A11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: D8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_2, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_0, well: H12}
