opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  trash: {name: Trash yo, model: fixed-trash, slot: 12}
  glycerol-plate_6: {model: 96-flat, slot: 11}
  Mycoplasma_syn3_2: {model: 96-flat, slot: 1}
procedure:
-
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: C5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: H6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: H1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: H5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: H2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_6, well: A3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: H3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
